<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <!--
        Gadgetron generic recon chain for 2D and 3D cartesian sampling

        Fat water imaging
        Triggered by slice
        Recon N is repetition and S is set
        The ref will only be prepared once on the first contrast data, and applied to all other contrasts

        Author: Hui Xue
        Magnetic Resonance Technology Program, National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <!-- reader -->
    <reader><slot>1008</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdAcquisitionMessageReader</classname></reader>
    <reader><slot>1026</slot><dll>gadgetron_mricore</dll><classname>GadgetIsmrmrdWaveformMessageReader</classname></reader>

    <!-- writer -->
    <writer><slot>1022</slot><dll>gadgetron_mricore</dll><classname>MRIImageWriter</classname></writer>

    <!-- Noise prewhitening -->
    <gadget><name>NoiseAdjust</name><dll>gadgetron_mricore</dll><classname>NoiseAdjustGadget</classname>
    </gadget>

    <!-- RO asymmetric echo handling -->
    <!--<gadget><name>AsymmetricEcho</name><dll>gadgetron_mricore</dll><classname>AsymmetricEchoAdjustROGadget</classname></gadget>-->

    <!-- RO oversampling removal -->
    <gadget><name>RemoveROOversampling</name><dll>gadgetron_mricore</dll><classname>RemoveROOversamplingGadget</classname></gadget>

    <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>slice</value></property>
        <property><name>sorting_dimension</name><value>contrast</value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>repetition</value></property>
        <property><name>S_dimension</name><value>contrast</value></property>
        <property><name>split_slices</name><value>true</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
    </gadget>

    <!-- Prep ref -->
    <gadget>
        <name>PrepRef</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconCartesianReferencePrepGadget</classname>

        <!-- parameters for debug and timing -->
        <!--property><name>debug_folder</name><value>DebugFolder</value></property-->
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>

        <!-- averaging across repetition -->
        <property><name>average_all_ref_N</name><value>false</value></property>
        <!-- every set has its own kernels -->
        <property><name>average_all_ref_S</name><value>false</value></property>
        <!-- Only use the first echo for reference data, to ensure phase correctness -->

        <!-- whether always to prepare ref if no acceleration is used -->
        <property><name>prepare_ref_always</name><value>false</value></property>
    </gadget>

     <!--Coil compression-->
    <!--<gadget>-->
        <!--<name>CoilCompression</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>GenericReconEigenChannelGadget</classname>-->

        <!--&lt;!&ndash; parameters for debug and timing &ndash;&gt;-->
        <!--&lt;!&ndash;property><name>debug_folder</name><value>DebugFolder</value></property&ndash;&gt;-->
        <!--<property><name>perform_timing</name><value>true</value></property>-->
        <!--<property><name>verbose</name><value>true</value></property>-->

        <!--<property><name>average_all_ref_N</name><value>true</value></property>-->
        <!--<property><name>average_all_ref_S</name><value>true</value></property>-->

        <!--&lt;!&ndash; Up stream coil compression &ndash;&gt;-->
        <!--<property><name>upstream_coil_compression</name><value>true</value></property>-->
        <!--<property><name>upstream_coil_compression_thres</name><value>-1</value></property>-->
        <!--<property><name>upstream_coil_compression_num_modesKept</name><value>0</value></property>-->
    <!--</gadget>-->

    <!-- Recon -->

    <gadget>
    <name>Recon</name>
    <dll>gadgetron_mricore</dll>
    <classname>GenericReconCartesianSpiritGadget</classname>

    <!-- image series -->
    <property><name>image_series</name><value>0</value></property>

     <!--Coil map estimation, Inati or Inati_Iter-->
    <property><name>coil_map_algorithm</name><value>Inati</value></property>

    </gadget>

    <!--<gadget>-->
        <!--<name>Recon</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>GenericReconCartesianGrappaGadget</classname>-->

        <!--&lt;!&ndash; image series &ndash;&gt;-->
        <!--<property><name>image_series</name><value>0</value></property>-->

        <!--&lt;!&ndash; Coil map estimation, Inati or Inati_Iter &ndash;&gt;-->
        <!--<property><name>coil_map_algorithm</name><value>Inati</value></property>-->

        <!--&lt;!&ndash; Down stream coil compression &ndash;&gt;-->
        <!--<property><name>downstream_coil_compression</name><value>false</value></property>-->
        <!--<property><name>downstream_coil_compression_thres</name><value>0.002</value></property>-->
        <!--<property><name>downstream_coil_compression_num_modesKept</name><value>0</value></property>-->

        <!--&lt;!&ndash; parameters for debug and timing &ndash;&gt;-->
        <!--&lt;!&ndash;property><name>debug_folder</name><value>DebugFolder</value></property&ndash;&gt;-->
        <!--<property><name>perform_timing</name><value>true</value></property>-->
        <!--<property><name>verbose</name><value>true</value></property>-->

        <!--&lt;!&ndash; whether to send out gfactor &ndash;&gt;-->
        <!--<property><name>send_out_gfactor</name><value>true</value></property>-->
    <!--</gadget>-->
    <!--<gadget>-->
        <!--<name>Recon</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>GenericReconCartesianFFTGadget</classname>-->
    <!--</gadget>-->



     <!--Partial fourier handling-->
    <!--<gadget>-->
        <!--<name>PartialFourierHandling</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>GenericReconPartialFourierHandlingFilterGadget</classname>-->

        <!--&lt;!&ndash; parameters for debug and timing &ndash;&gt;-->
        <!--&lt;!&ndash;property><name>debug_folder</name><value>DebugFolder</value></property&ndash;&gt;-->
        <!--<property><name>perform_timing</name><value>false</value></property>-->
        <!--<property><name>verbose</name><value>false</value></property>-->

        <!--&lt;!&ndash; if incoming images have this meta field, it will not be processed &ndash;&gt;-->
        <!--<property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>-->

        <!--&lt;!&ndash; Parfial fourier handling filter parameters &ndash;&gt;-->
        <!--<property><name>partial_fourier_filter_RO_width</name><value>0.15</value></property>-->
        <!--<property><name>partial_fourier_filter_E1_width</name><value>0.15</value></property>-->
        <!--<property><name>partial_fourier_filter_E2_width</name><value>0.15</value></property>-->
        <!--<property><name>partial_fourier_filter_densityComp</name><value>false</value></property>-->
    <!--</gadget>-->

    <!--&lt;!&ndash; Kspace filtering &ndash;&gt;-->
    <!--<gadget>-->
        <!--<name>KSpaceFilter</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>GenericReconKSpaceFilteringGadget</classname>-->

        <!--&lt;!&ndash; parameters for debug and timing &ndash;&gt;-->

        <!--<property><name>perform_timing</name><value>false</value></property>-->
        <!--<property><name>verbose</name><value>false</value></property>-->

        <!--&lt;!&ndash; if incoming images have this meta field, it will not be processed &ndash;&gt;-->
        <!--<property><name>skip_processing_meta_field</name><value>Skip_processing_after_recon</value></property>-->

        <!--&lt;!&ndash; parameters for kspace filtering &ndash;&gt;-->
        <!--<property><name>filterRO</name><value>Gaussian</value></property>-->
        <!--<property><name>filterRO_sigma</name><value>1.0</value></property>-->
        <!--<property><name>filterRO_width</name><value>0.15</value></property>-->

        <!--<property><name>filterE1</name><value>Gaussian</value></property>-->
        <!--<property><name>filterE1_sigma</name><value>1.0</value></property>-->
        <!--<property><name>filterE1_width</name><value>0.15</value></property>-->

        <!--<property><name>filterE2</name><value>Gaussian</value></property>-->
        <!--<property><name>filterE2_sigma</name><value>1.0</value></property>-->
        <!--<property><name>filterE2_width</name><value>0.15</value></property>-->
    <!--</gadget>-->
    <gadget>
        <name>Combiner</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageAccumulatorGadget</classname>
        <property>
            <name>accumulate_dimension</name>
            <value>contrast</value>
        </property>
        <property>
            <name>combine_along</name>
            <value>S</value>
        </property>
    </gadget>
    <!-- FOV Adjustment -->
    <gadget>
        <name>FOVAdjustment</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

        <!-- parameters for debug and timing -->

        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>
    </gadget>

    <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>10.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>

    <gadget>
        <name>FatWater</name>
        <dll>gadgetron_fatwater</dll>
        <classname>FatWaterGadget</classname>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <gadget>
        <name>Extract</name>
        <dll>gadgetron_mricore</dll>
        <classname>ExtractGadget</classname>

    </gadget>

    <!-- after recon processing -->
    <!--<gadget>-->
        <!--<name>ComplexToFloatAttrib</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>ComplexToFloatGadget</classname>-->
    <!--</gadget>-->

    <!--<gadget>-->
        <!--<name>FloatToShortAttrib</name>-->
        <!--<dll>gadgetron_mricore</dll>-->
        <!--<classname>FloatToUShortGadget</classname>-->
    <!--</gadget>-->

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
